# Generated by Configurator on Wed Dec 04 19:50:04 PST 2024

# Reset
Property,Core,Initialize,0

# Devices
Device,DHub,DemoCamera,DHub
Device,Camera,DemoCamera,DCam
Device,ZStage,DemoCamera,DStage
Device,XYStage,DemoCamera,DXYStage
Device,TTLSwitch,Lumencor,TTLSwitch
Device,G2SBigTiffStorage,Go2Scope,G2SBigTiffStorage

# Pre-init settings for devices
Property,Camera,MaximumExposureMs,10000.0000
Property,TTLSwitch,Connection,
Property,TTLSwitch,Port,

# Pre-init settings for COM ports

# Hub (parent) references
Parent,Camera,DHub
Parent,ZStage,DHub
Parent,XYStage,DHub

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions
FocusDirection,ZStage,1

# Roles
Property,Core,Camera,Camera
Property,Core,Focus,ZStage
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Readout
# Preset: Standard
ConfigGroup,Readout,Standard,Camera,TestProperty1,0.0000

# Preset: Fast
ConfigGroup,Readout,Fast,Camera,TestProperty1,0.0004


# Group: Channel
# Preset: CYAN
ConfigGroup,Channel,CYAN,TTLSwitch,State,1

# Preset: RED
ConfigGroup,Channel,RED,TTLSwitch,State,3

# Preset: GREEN
ConfigGroup,Channel,GREEN,TTLSwitch,State,2

# Preset: VIOLET
ConfigGroup,Channel,VIOLET,TTLSwitch,State,0


# Group: System
# Preset: Startup
ConfigGroup,System,Startup,Camera,Exposure,10.0000
ConfigGroup,System,Startup,Camera,OnCameraCCDXSize,2368
ConfigGroup,System,Startup,Camera,OnCameraCCDYSize,2368
ConfigGroup,System,Startup,Camera,PixelType,16bit
ConfigGroup,System,Startup,Camera,TestProperty1,0.0000



# PixelSize settings

